PsychoPy2experiment version="2021.2.1"
Settings
  Data filename = u'archive/%s_%s_%s' % (expInfo['id'], expName, expInfo['date'])
  Experiment info = {'id': '', 'experimenter': '', 'stim_list': '', 'task': "['square-go', 'circle-go']", 'phase': "['prac', 'real']", 'eeg_record': "['yes', 'no']", 'show_control_monitor': "['no', 'yes']"}
  Full-screen window = True
  Monitor = RoseLab
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  color = $[0.0,0.0,0.0]
  expName = emo_gonogo
  logging level = debug
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Routines
  Routine trial
    CodeComponent trial_timing_params
      Code Type = Py
      Begin Routine:
        # Randomly select a trial jitter
        shuffle(jitters)
        this_jitter = jitters[0]

        # Add to the trialHandler object
        trials.addData(u'jitter', this_jitter)
    CodeComponent send_eeg_trigger
      Code Type = Py
      Begin Routine:
        # Reset the trigger
        if eeg_record and this_phase == 'real':
            eeg_trig_box.write(reset_bit)

        # At start of the trial, indicate I have not snt a trigger
        stim_trigger_sent = False
        stim_trigger_frame = 0

        # Determine trigger value
        this_marker_code = stim_marker[trial_type][description]
      Each Frame:
        # Send trigger if needed
        if eeg_record:
            if stim_image.status == STARTED:
                if not stim_trigger_sent and this_phase == 'real':
                    win.callOnFlip(eeg_trig_box.write, this_marker_code)
                    stim_trigger_sent = True
                    stim_trigger_frame = frameN
                    trials.addData(u'stim_trigger_frame', stim_trigger_frame)

            # Reset the trigger at the next flip
            if stim_trigger_sent and frameN == stim_trigger_frame + 1: # Do this 1 frames later
                win.callOnFlip(eeg_trig_box.write, reset_bit)
    ImageComponent bg_image
      durationEstim = 1
      image [set every repeat] = $os.path.join('images', f'{image}.jpg')
      size = (16.0, 12.0)
      startEstim = .25
      startVal [frame N] = trial_start_isi_duration
      stopVal [duration (frames)] = image_duration
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    ImageComponent stim_image
      durationEstim = 1.0
      image [set every repeat] = $gonogo_image
      size = (6.0, 6.0)
      startEstim = .25
      startVal [frame N] = trial_start_isi_duration
      stopVal [duration (frames)] = image_duration
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    PolygonComponent photosensor_dot
      durationEstim = 1.0
      fillColor = $[1,1,1]
      nVertices = 180
      pos = (-35.3, -19.2)
      shape = regular polygon...
      size = (1.5,1.5)
      startEstim = .25
      startVal [frame N] = trial_start_isi_duration
      stopVal [duration (frames)] = image_duration
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    TextComponent trial_red_fixation
      color = red
      durationEstim = 2.4
      letterHeight = 1
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = trial_start_isi_duration + image_duration + this_jitter
      text = +
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    KeyboardComponent response
      allowedKeys = 'f', 'j'
      durationEstim = 2.15
      forceEndRoutine = False
      startEstim = .25
      startVal [frame N] = trial_start_isi_duration
      stopVal [duration (frames)] = image_duration + this_jitter
      store = first key
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    CodeComponent send_resp_trigger_and_code
      Code Type = Py
      Begin Routine:
        # State I have not sent a response trigger yet, and initialize response.keys
        resp_trigger_sent = False
        resp_marker_frame = 0

        # Response markers are outlined in the config routine.
      Each Frame:
        if expInfo['phase'] == 'prac':
            # Code the response when it happens
            if len(response.keys) == 1:

                # Code the response
                this_key = response.keys
                this_rt  = response.rt
                if trial_type == 'go':
                    is_resp_cor = 1
                    resp_type = 'correct'
                else:
                    is_resp_cor = 0
                    resp_type = 'incorrect'

        # Send response trigger
        if eeg_record:

            # Code the response when it happens
            if len(response.keys) == 1:

                # Code the response
                this_key = response.keys
                this_rt  = response.rt
                if trial_type == 'go':
                    is_resp_cor = 1
                    resp_type = 'correct'
                else:
                    is_resp_cor = 0
                    resp_type = 'incorrect'

                # Send the marker
                if not resp_trigger_sent and this_phase == 'real':
                    # Make call to send trigger
                    win.callOnFlip(eeg_trig_box.write, resp_marker[resp_type])
                    resp_trigger_sent = True
                    resp_marker_frame = frameN
                    trials.addData(u'resp_trigger_frame', resp_marker_frame)

            # Reset the trigger at the next flip
            if resp_trigger_sent and frameN == resp_marker_frame + 1:
                win.callOnFlip(eeg_trig_box.write, reset_bit)
      End Routine:
        # Log and store data
        if response.keys in ['', [], None]: # Update things I need to
            this_key = 'n/a'
            this_rt = -99
            if trial_type == 'nogo':
                is_resp_cor = 1
            else:
                is_resp_cor = 0

        # Add data to trialHandler
        trials.addData(u'resp',this_key)
        trials.addData(u'rt',this_rt)
        trials.addData(u'correct',is_resp_cor)
  Routine delay
    CodeComponent delay_control_monitor
      Code Type = Py
      Begin Routine:
        # Determine if delay is needed
        if draw_delay:
            continueRoutine = True
        else:
            continueRoutine = False

        if eeg_record and show_control:
            control_text.setText('Task')
            control_text.draw()
            win2.flip()
    TextComponent delay_red_fix
      color = red
      durationEstim = 20
      letterHeight = 1
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = delay_duration
      text = +
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  Routine instructions
    CodeComponent instructions_control_monitor
      Code Type = Py
      Begin Routine:
        this_block = expInfo['task']
        this_phase = expInfo['phase']

        # Display on control monitor if needed
        if show_control:
            control_text.setText('Instructions')
            control_text.draw()
            win2.flip()
    ImageComponent instruction_image
      image = $instruction_image_file
      size = (44.53, 24.67)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruction_wait
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      store = nothing
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  Routine save_trials
    CodeComponent save_trial_handler
      Code Type = Py
      Begin Routine:
        # Make the save file name (This should have accurate id as it is reading from it)
        save_file_name = f"sub-{expInfo['id']}_task-{this_block}_run-{this_phase}_beh"
        save_pickle = save_dir /  save_file_name
        save_tsv = save_dir / (save_file_name + '.tsv')
        save_csv = save_dir / (save_file_name + '.csv')

        # Save it many different ways
        trials.saveAsWideText(save_tsv)
        trials.saveAsWideText(save_csv)
        trials.saveAsPickle(save_pickle)
    TextComponent final_red_fix
      color = red
      durationEstim = 20
      letterHeight = 1
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = delay_duration
      text = +
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  Routine task_complete
    CodeComponent task_complete_control_monitor
      Code Type = Py
      Begin Routine:
        if eeg_record and show_control:
            control_text.setText('TASK COMPLETE')
            control_text.draw()
            win2.flip()
    CodeComponent save_experiment_handler
      Code Type = Py
      Begin Routine:
        # Resave experiment handler just in case
        # This is copied from code generated by PsychoPy Builder
        thisExp.saveAsPickle(filename)
        thisExp.saveAsWideText(filename + '.csv')
        thisExp.saveAsWideText(filename + '.tsv')
    TextComponent task_complete_text
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = This task is now complete.
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  Routine task_break
    CodeComponent task_break_code
      Code Type = Py
      Begin Experiment:
        # Define number of trials between rests
        task_break_n = 100
      Begin Routine:
        # Determine if a break is needed
        if trials.thisN == 0:
            continueRoutine = False
            draw_delay = True
        elif trials.thisN % task_break_n == 0:
            continueRoutine = True
            draw_delay = True
        else:
            continueRoutine = False
            draw_delay = False

        # Show control monitor if needed
        if eeg_record and continueRoutine and show_control:
            control_text.setText('Break')
            control_text.draw()
            win2.flip()
    TextComponent break_text1
      letterHeight = 1
      startVal [time (s)] = 0
      text [set every repeat] = Take a break.
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    TextComponent break_text2
      letterHeight = 1
      startVal [time (s)] = 30
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      text:
        Let the experimenter know when you are ready to continue.
    KeyboardComponent break_resp
      allowedKeys = [' ','space']
      forceEndRoutine = True
      startVal [time (s)] = 30
      store = nothing
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  Routine config
    CodeComponent configure_options
      Code Type = Py
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      Begin Experiment:
        ## Import some useful libraries
        from pathlib import Path
        from random import shuffle
        import pandas as pd

        ## TASK PARAMETERS

        ## TIMING OPTIONS
        # Timing Variables (all are in seconds)
        # These are converted to frames in the Begin Routine tab (changed in place)
        image_duration = .5 # Length the image is on the screen
        delay_duration = 5.0 # Time padding beginning and end of a trial segment.
        trial_start_isi_duration = .25 # TIme padding at from to load images
        jitter_spacing = frameDur # Intervals between jitter possibilities, same as frameDur
        min_jitter = 1.00 # Minimum jitter duration
        max_jitter = 1.50 # Maximum jitter duration

        # Make jitters list
        jitters = np.arange(min_jitter - trial_start_isi_duration,
                            max_jitter + frameDur - trial_start_isi_duration,
                            frameDur)

        ## EEG SETUP TRIGGER OPTIONS
        eeg_com = 'COM5' # Can check the Device Manager in windows to figure this out (COM Ports).
        reset_bit = [0] # Don't change this unless you know what you are doing

        # Stimulus markers
        # The codes sent for trial has two digits.
        # First digit codes fortrial type (1=go, 2=nogo)
        # Second digit the stimuls (1=square, 2=circle)
        # The Markers are in a dictionary
        stim_marker = {
            'go': dict(square_go=[11], circle_go=[12]),
            'nogo': dict(square_nogo=[21], circle_nogo=[22])
        }

        # Response markers
        # This is the code for whether a response is given.
        # The codes are 51 for correct go response and
        # 52 for incorrecr response to a nogo trial
        resp_marker = {
            'correct': [51],
            'incorrect': [52]
        }
      Begin Routine:
        # Note that frameDur is the duration of a single frame estimated
        # by psychopy. If it fails to detect in (e.g., frameRate == Null),
        # this typically defaults to 60.0 Hz. Note that this timing scheme
        # allows for reproducibility across systems (monitors, computers, etc.)

        # THE FOLLOWING SHOULD NOT BE CHANGED (minus variable names)

        # Critical timing pieces
        image_duration = round(image_duration / frameDur)
        delay_duration = round(delay_duration / frameDur)
        trial_start_isi_duration = round(trial_start_isi_duration / frameDur)
        jitters = np.round(jitters / frameDur)
  Routine setup
    CodeComponent frame_rate_optimization
      Code Type = Py
      Begin Experiment:
        ## FRAM RATE OPTIMIZATION OPTIONS
        processPriority = 'realtime' # Can be 'normal', 'high', 'realtime'
        disableGC = True # disable garbage collection

        # Import garbage collection module
        import gc

        # Handle Priority stuff
        if processPriority == 'normal':
            pass
        elif processPriority == 'high':
            core.rush(True)
        elif processPriority == 'realtime':
            # Only makes a diff compared to 'high' on Windows.
            core.rush(True, realtime=True)
        else:
            raise Exception('Invalid process priority:', processPriority, "Process running at normal.")

        # Handle Garbage Collection
        if disableGC:
            gc.disable()
    CodeComponent info_gui_code
      Code Type = Py
      Begin Experiment:
        # Define eeg_record
        # If eeg_record == 'no', will not send triggers to output.
        if expInfo['eeg_record'] == 'yes':
            eeg_record = True
        else:
            eeg_record = False

        # Get this phase
        expInfo['stim_list'] = int(expInfo['stim_list'])
        this_phase = expInfo['phase']

        # If eeg_record == 'no', will not send triggers to output.
        if expInfo['show_control_monitor'] == 'yes':
            show_control = True
        else:
            show_control = False

        # Check if frameRate can be determined, if not, exit out
        frameRate = expInfo['frameRate']
        if frameRate == None:
            print('frame rate not established. Try Again.')
            win.close()
            core.quit()

        # Verify everything
        if show_control:
            dlg = gui.DlgFromDict(dictionary=expInfo, title='Is this information correct?')
            if dlg.OK == False:
                win.close()
                core.quit()  # user pressed cancel
    CodeComponent control_monitor_code
      Code Type = Py
      Begin Experiment:
        # Record frame intervals
        win.recordFrameIntervals = False

        # Setup window 2 only if asked too
        if show_control:

            win2 = visual.Window(
                size=[1920,1080], fullscr=True, screen=1,
                allowGUI=False, allowStencil=False,
                color=[-1.0,-1.0,-1.0], colorSpace='rgb',
                blendMode='avg', useFBO=True,
                units='pixels')

            control_text = visual.TextStim(win=win2,
                text='default text',
                font='Helvetica',
                pos=(0, 0), height=40, wrapWidth=200, ori=0,
                color='white', colorSpace='rgb', opacity=1,
                depth=-1.0)
      End Experiment:
        # Close the control room monitor
        if show_control:
            win2.close()
    CodeComponent data_save_setup
      Code Type = Py
      Begin Experiment:
        # Setup save directorya
        save_dir = Path('data') / f"sub-{expInfo['id']}"
        save_dir.mkdir(exist_ok=True, parents=True)
    CodeComponent eeg_trigger_setup
      Code Type = Py
      Begin Experiment:
        if eeg_record and this_phase == 'real':

            # Import library
            import serial

            # Setup box
            eeg_trig_box = serial.Serial(eeg_com)
            eeg_trig_box.write(reset_bit)
      End Experiment:
        # Return bits to low state, then close connection
        if eeg_record:
            eeg_trig_box.write(reset_bit)
            eeg_trig_box.close()
    CodeComponent select_stim_file
      Code Type = Py
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      Begin Experiment:
        # Handle the file names
        from pathlib import Path
        stim_dir = Path('stim_lists')
        square_file = stim_dir / f"set-{expInfo['stim_list']:03}_run-squarego.csv"
        circle_file = stim_dir / f"set-{expInfo['stim_list']:03}_run-circlego.csv"

        # Get the stim file
        if expInfo['task'] == 'square-go':
            if expInfo['phase'] == 'prac':
                stim_file = 'set-prac_run-squarego.csv'
                instruction_image_file = 'squarego_prac_instr.jpg'
            else:
                stim_file = str(square_file)
                instruction_image_file = 'squarego_real_instr.jpg'
        else:
            if expInfo['phase'] == 'prac':
                stim_file = 'set-prac_run-circlego.csv'
                instruction_image_file = 'circlego_prac_instr.jpg'
            else:
                stim_file = str(circle_file)
                instruction_image_file = 'circlego_real_instr.jpg'

        print(stim_file)
        print(instruction_image_file)
  Routine feedback
    CodeComponent show_feedback
      Code Type = Py
      Begin Routine:
        if this_phase == 'real':
            continueRoutine=False

        feedback_text1 = 'CORRECT' if is_resp_cor == 1 else 'INCORRECT'
        if is_resp_cor == 1:
            feedback_text2 = ''
        elif trial_type == 'go':
            shape = 'square' if description == 'square_go' else 'circle'
            feedback_text2 = f'Press the button when you see a {shape}'
        else:
            shape = 'circle' if description == 'square_go' else 'square'
            feedback_text2 = f'Do not press the button when you see a {shape}'
    TextComponent feedback1
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedback_text1
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    TextComponent feedback2
      letterHeight = 1
      pos = (0, -2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedback_text2
      wrapWidth = 100
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Flow
  Routine config
  Routine setup
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $stim_file
    loopType = sequential
    nReps = 1
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    Routine task_break
    Routine delay
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine save_trials
  Routine task_complete
